PsychoPy2experiment version="2022.2.5"
Settings
  Data file delimiter = comma
  Enable Escape = False
  Experiment info = {'participant': 'Sub', 'record': '["0","1"]', 'version': '["train","test"]', 'task': '["n-back","ax-cpt"]'}
  Full-screen window = True
  Monitor = Monitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.0039, 0.0039, 0.0039
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 500
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = ADOEFFORT
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent letters_display
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Letters[block][trial]
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    TextComponent gap
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1
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    TextComponent score_text
      color = black
      letterHeight = 0.03
      pos = (0.25, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"# " +str(m_correct[block])
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    CodeComponent code_main
      Code Type = Py
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      Begin Routine:
        stimuli_mouse.setVisible(visible=0)
        if record == 1:
            win.callOnFlip(send_trigger,n_back[block]*10)

        timer = core.Clock()
        Rtrial = 1.5
      Each Frame:
        if frameN == 5:
            if record == 1:
                win.callOnFlip(send_trigger,100+m_correct[block])

        if stimuli_mouse.getPressed()[0]==1:
            if record == 1:
                win.callOnFlip(send_trigger,8)
                send_trigger(8)

            Rtrial = timer.getTime()-0.5
            stimuli_mouse.clickReset()
            same = 1
      End Routine:
        if expInfo['task'] == "n-back":
            check(Letters[block][trial],Letters[block][trial-n_back[block]])
        else:
            check(Letters[block][trial],Letters[block][trial-1])


        if record == 1:
            win.callOnFlip(send_trigger,fd)


        if score  == -1:
            score  = 0

        thisExp.addData("score",score)
        thisExp.addData("feedback",fd)
        thisExp.addData("responseTime",Rtrial)
        thisExp.addData("letter", Letters[block][trial])
        thisExp.addData("trial",trial)


        trial += 1
        same = 0
        stimuli_mouse.clickReset()
        core.wait(0.002)
    TextComponent instruction_text
      color = black
      letterHeight = 0.03
      pos = (-0.25, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $" " + str(eg[n_back[block]])
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      pos = (-0.87, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine intruction
    TextComponent instru
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        (some instruction but maybe we can remove this slide and give them a printed instructions with two side english and french)




        Cliquez avec le bouton droit de la souris pour continuer
    CodeComponent code_instru
      Code Type = Py
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      Begin Experiment:
        same = 0
        trial = 0
        score = 0
        n_miss = 0
        n_error = 0
        n_pass = 0
        n_hit = 0
        fd = 0
        block = 0
        n_block = 0
        fd_text = ""
        calibing = 1

        stimuli_mouse = event.Mouse()
        stimuli_mouse.setVisible(visible=0)

        record = int(expInfo['record'])
        if record == 1:
            ioConfig['eyetracker.hw.sr_research.eyelink.EyeTracker']['default_native_data_file_name'] = expInfo['participant']
            from psychopy import parallel
            parallel.setPortAddress(0x0000BFE8)
            parallel.setData(0)


        if expInfo['task'] == "n-back":
            def check(x,y):
                global same
                global fd
                global score
                global n_hit
                global n_error
                global n_miss
                global n_pass
                global trial
                if x == y:
                    if same == 1:
                        score += 1
                        n_hit += 1
                        fd = 13
                    else:
                        n_miss += 1
                        fd = 11
                else:
                    if same==1:
                        score -= 1
                        n_error += 1
                        fd=12



            if expInfo['version'] == "train":
                #train letters
                Letters = [['u', 'c', 'n', 'n', 'u', 'u', 'm', 'n', 'n', 'u', 'u', 's', 'm', 'm', 'c', 'c', 'n', 'm', 'u', 'u', 'c', 'm', 'u', 'm', 'm', 'u', 'm', 'c', 'c', 'n', 'n', 'u', 'u', 's', 'u', 'u', 'm', 'c', 'm', 'c', 'c', 'n', 'n', 'm', 'm', 'n', 'n', 's', 'u', 'u', 's', 'u', 'n', 'c', 'c', 'n', 'n', 'c', 'c', 'n'], ['m', 'u', 'c', 'u', 'm', 'n', 'u', 'n', 'u', 'u', 's', 'c', 'n', 'n', 'u', 'u', 's', 'c', 'm', 'u', 'c', 'u', 'n', 'u', 'c', 'u', 'm', 'u', 'c', 'n', 'n', 'u', 'n', 'c', 'm', 'm', 'u', 'm', 'u', 'u', 'n', 'm', 'n', 'u', 'n', 'c', 'n', 'c', 'u', 'c', 'm', 'u', 'm', 'c', 'u', 'n', 'u', 'n', 'm', 'n'], ['u', 'c', 'c', 'm', 'c', 'u', 'm', 'c', 'n', 'u', 'u', 'c', 'u', 'u', 's', 'u', 'n', 'c', 'u', 'm', 'n', 'c', 'n', 'm', 'n', 'u', 'u', 's', 'u', 'n', 'n', 'c', 'u', 'c', 'u', 'm', 'u', 'c', 'm', 'u', 'c', 'u', 'n', 'c', 'u', 'n', 'c', 'm', 'n', 'm', 'u', 'm', 'm', 'u', 'c', 'm', 'n', 'u', 'm', 'c'], ['c', 'u', 'n', 'm', 'c', 'n', 'c', 'c', 's', 'u', 'm', 'm', 'u', 'u', 'c', 'm', 'c', 'c', 'm', 'u', 'm', 'u', 'u', 'n', 'u', 'u', 's', 'u', 'c', 'u', 'u', 'n', 'm', 'u', 'u', 's', 'u', 'c', 'm', 'c', 'c', 'm', 'm', 'c', 'm', 'c', 'n', 'n', 'u', 'c', 'n', 'c', 'c', 'n', 'c', 'n', 'c', 'u', 'c', 'c'], ['m', 'n', 'm', 'm', 'u', 'u', 'n', 'u', 'u', 'n', 'u', 'm', 'n', 'm', 'u', 'c', 'n', 'c', 'm', 'm', 's', 'c', 'c', 'm', 'c', 'm', 'c', 'm', 'c', 'c', 'n', 'u', 'm', 'c', 'm', 'n', 'c', 'c', 'n', 'c', 'm', 'n', 'c', 'n', 'n', 'c', 'm', 'm', 'u', 'n', 'm', 'u', 'n', 'u', 'u', 's', 'u', 'c', 'm', 'n'], ['n', 'n', 'c', 'u', 'u', 's', 'n', 'n', 'c', 'n', 'n', 'c', 'u', 'c', 'c', 'm', 'n', 'c', 'm', 'n', 'c', 'c', 'm', 'c', 'u', 'm', 'c', 'm', 'c', 'c', 'm', 'm', 's', 'n', 'm', 'n', 'u', 'n', 'u', 'm', 'u', 'u', 's', 'c', 'u', 'u', 's', 'm', 'u', 'c', 'u', 'u', 'c', 'c', 'n', 'u', 'm', 'm', 'u', 'u'], ['u', 'n', 'u', 'c', 'n', 'c', 'u', 'n', 'c', 'm', 'c', 'c', 'n', 'n', 'u', 'u', 'm', 'm', 'c', 'u', 'm', 'n', 'u', 'm', 'n', 'n', 'm', 'n', 'm', 'm', 'c', 'c', 'm', 'm', 'n', 'm', 'n', 'u', 'n', 'u', 'u', 'm', 'n', 'c', 'n', 'n', 'u', 'c', 'n', 'c', 'u', 'c', 'm', 'u', 'm', 'm', 'u', 'n', 'm', 'n'], ['c', 'm', 'c', 'n', 'c', 'n', 'c', 'u', 'n', 'u', 'u', 's', 'm', 'c', 'c', 'm', 'u', 'n', 'm', 'n', 'm', 'm', 'c', 'u', 'u', 'n', 'c', 'u', 'm', 'c', 'c', 'm', 'c', 'm', 'm', 'u', 'm', 'u', 'm', 'n', 'n', 'c', 'n', 'n', 'u', 'm', 'n', 'u', 'n', 'n', 'c', 'm', 'n', 'c', 'u', 'c', 'm', 'u', 'c', 'n']]
                m_correct = [5,5,5,5,5,5,5,5]
                n_back = [1,2,3,3,3,3,3,3]
            else:
                #test letters
                Letters = [['m', 'u', 'm', 'c', 'c', 'm', 'm', 'n', 'm', 'n', 'm', 'c', 'n', 'm', 'm', 'n', 'c', 'n', 'm', 'm', 'm', 'm', 'm', 'm', 'm', 'c', 'u', 'n', 'c', 'c', 'c', 'm', 'c', 'c', 'n', 'c', 'c', 'm', 'n', 'n', 'n', 'n', 'c', 'm', 'u', 'c', 'm', 'u', 'u', 'c', 'n', 'n', 'n', 'm', 'u', 'u', 'n', 'u', 'n', 'n'], ['c', 'n', 'c', 'm', 'c', 'm', 'n', 'u', 'n', 'u', 'n', 'm', 'c', 'm', 'c', 'n', 'c', 'u', 'n', 'u', 'm', 'c', 'm', 'm', 'n', 'm', 'u', 'u', 'c', 'm', 'c', 'c', 'u', 'c', 'n', 'u', 'm', 'u', 'c', 'm', 'n', 'n', 'c', 'c', 'u', 's', 'u', 'c', 'm', 's', 'm', 'n', 'm', 'm', 'u', 'n', 'u', 'n', 'm', 'm'], ['m', 'm', 'n', 'c', 'm', 'n', 'm', 'm', 'c', 'c', 'm', 'c', 'n', 'm', 'c', 'm', 'n', 'n', 'c', 'u', 's', 'u', 'c', 'c', 'u', 'u', 'c', 'u', 's', 'u', 's', 'u', 'u', 'm', 'm', 'n', 'u', 'n', 'u', 'm', 's', 'm', 'n', 'c', 'n', 'n', 'm', 'n', 'm', 'm', 'n', 's', 'n', 'n', 'u', 'n', 'm', 'u', 'u', 'n'], ['n', 'c', 'm', 's', 'm', 'n', 'u', 'c', 'm', 'c', 's', 'c', 'm', 'n', 'u', 'n', 's', 'n', 'u', 'u', 'c', 'u', 'c', 'u', 'c', 'm', 'n', 'm', 'u', 'u', 'n', 'c', 'm', 's', 'm', 'm', 'u', 'm', 'n', 'm', 'c', 'u', 'c', 'u', 'c', 'm', 'u', 'm', 'n', 's', 'n', 'u', 'm', 'u', 'n', 'm', 'u', 'm', 'n', 'u'], ['c', 'u', 'n', 'c', 'n', 'n', 'm', 'n', 'u', 'n', 'n', 'n', 'c', 'c', 'c', 'n', 'n', 'm', 'n', 'u', 'u', 'm', 'c', 'c', 'n', 'u', 'u', 'c', 'c', 'u', 'm', 'm', 'n', 'u', 'n', 'u', 'c', 'm', 'c', 'c', 'n', 'n', 'm', 'm', 'm', 'u', 'm', 'u', 'm', 'm', 'm', 'm', 'm', 'n', 'u', 'c', 'n', 'n', 'n', 'n'], ['m', 'm', 'n', 'm', 'u', 'n', 'm', 'u', 'n', 'm', 'n', 'c', 's', 'c', 'n', 'm', 'n', 'n', 'm', 'n', 'm', 'c', 'm', 'c', 'c', 'm', 'u', 'm', 'm', 'n', 'u', 'm', 'n', 'u', 'u', 'c', 's', 'c', 'n', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'm', 'u', 'c', 's', 'c', 'm', 'c', 'c', 'm', 'u', 'm', 'c', 'u', 'u'], ['u', 'c', 'n', 'c', 'u', 'n', 'u', 'm', 'c', 'n', 'c', 's', 'c', 'c', 'u', 'u', 'c', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'c', 'u', 'm', 's', 'm', 'm', 'c', 'm', 'c', 'm', 'u', 'm', 'c', 'n', 'u', 'm', 'n', 'm', 'm', 'c', 'c', 'm', 'c', 'c', 'n', 'u', 'n', 'u', 's', 'u', 'm', 'm', 'n', 'u'], ['m', 'c', 'u', 'u', 'n', 'm', 'c', 'c', 'm', 'm', 'c', 'n', 'u', 'c', 'u', 'u', 'n', 'u', 'u', 'c', 'c', 'u', 'c', 'c', 'm', 'u', 'c', 'c', 'm', 'c', 'u', 'u', 'n', 'u', 'c', 'm', 'm', 'u', 'm', 'u', 'm', 'n', 's', 'n', 'n', 'c', 'n', 'u', 'c', 'c', 'u', 'c', 'c', 'u', 'u', 'm', 'n', 'n', 'u', 'u'], ['m', 'm', 'm', 'u', 'u', 'u', 'c', 'n', 'u', 'u', 'm', 'm', 'm', 'u', 'c', 'c', 'u', 'n', 'm', 'n', 'u', 'c', 'c', 'm', 'm', 'm', 'm', 'm', 'm', 'n', 'u', 'm', 'n', 'n', 'u', 'm', 'u', 'u', 'n', 'n', 'm', 'c', 'c', 'm', 'c', 'm', 'n', 'u', 'c', 'm', 'u', 'c', 'c', 'n', 'u', 'n', 'n', 'c', 'm', 'm'], ['c', 'u', 'c', 'u', 'u', 'm', 'n', 'u', 'm', 'u', 's', 'u', 'c', 'n', 'u', 'n', 'u', 's', 'u', 's', 'u', 'n', 'c', 'n', 'n', 'm', 'n', 'c', 'm', 'u', 's', 'u', 'n', 'c', 'n', 'n', 'c', 'n', 'u', 'n', 's', 'n', 'u', 'n', 's', 'n', 'u', 'u', 'n', 's', 'n', 'n', 'u', 'c', 'u', 'c', 'c', 'n', 'n', 'n'], ['u', 'n', 'u', 'n', 'c', 'm', 'u', 'm', 'c', 'c', 'n', 's', 'n', 'm', 'c', 'm', 'n', 'c', 'm', 'c', 'm', 'n', 'u', 'c', 's', 'c', 'm', 'n', 'n', 'c', 'n', 'n', 'm', 'n', 'm', 'n', 'm', 'm', 'u', 'm', 'c', 'n', 'm', 'n', 'm', 'm', 'c', 'm', 'n', 'm', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'm'], ['n', 'n', 'm', 'n', 'c', 'm', 'm', 'n', 'n', 'u', 'm', 'n', 'm', 'm', 'c', 'c', 'c', 'n', 'n', 'n', 'u', 'm', 'n', 'n', 'c', 'c', 'c', 'n', 'u', 'u', 'm', 'm', 'c', 'c', 'n', 'm', 'm', 'm', 'u', 'n', 'n', 'u', 'n', 'n', 'c', 'u', 'u', 'c', 'm', 'n', 'c', 'n', 'm', 'm', 'n', 'm', 'n', 'm', 'n', 'c'], ['n', 'u', 'u', 'n', 'n', 'u', 'u', 'n', 'm', 'm', 'n', 'c', 'u', 'n', 'm', 'c', 'm', 'm', 'u', 'm', 'u', 's', 'u', 'n', 'n', 'm', 'n', 'u', 'n', 'm', 'n', 'c', 'm', 'n', 'c', 'u', 'u', 'n', 'u', 'u', 'n', 'u', 'c', 'u', 'n', 'm', 'u', 'c', 'm', 'c', 'n', 's', 'n', 'n', 'u', 'c', 'u', 'u', 'u', 'n'], ['m', 'u', 'm', 'c', 'u', 'm', 'c', 'c', 'u', 'c', 'u', 'm', 'u', 'n', 'n', 'c', 'u', 'u', 'c', 'u', 'n', 'c', 'c', 'm', 'c', 'm', 'm', 'n', 'm', 'u', 'm', 'c', 'u', 'c', 'u', 'n', 'c', 'u', 'c', 'c', 'm', 'u', 'u', 'c', 'u', 'm', 'c', 'u', 'u', 'm', 'u', 'c', 'm', 'c', 'u', 'm', 'n', 'n', 'n', 'n'], ['m', 'm', 'n', 'm', 'm', 'u', 'm', 'c', 'm', 'n', 'u', 'n', 'u', 'n', 'n', 'u', 'c', 'u', 'c', 'n', 'c', 'u', 'c', 'n', 'u', 'u', 'm', 'u', 'n', 'n', 'c', 'n', 'u', 'c', 'n', 'c', 'm', 'c', 'm', 'm', 'n', 'm', 'n', 'n', 'm', 'u', 'c', 'c', 'n', 'c', 'u', 'm', 'u', 'u', 'm', 'c', 'm', 'u', 'u', 'n'], ['m', 'n', 'u', 'n', 'c', 'c', 'c', 'm', 'c', 'n', 'n', 'c', 'n', 'u', 'u', 'n', 'u', 'm', 'm', 'm', 'u', 'c', 'm', 'u', 'c', 'c', 'c', 'c', 'c', 'c', 'n', 'n', 'c', 'n', 'm', 'c', 'c', 'c', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'u', 'm', 'n', 'm', 'm', 'u', 'u', 'm', 'm', 'c', 'm', 'm', 'm', 'u', 'c'], ['c', 'n', 'c', 'c', 'u', 'n', 'c', 'n', 'n', 'c', 'n', 'n', 'm', 'n', 'n', 'u', 'n', 'c', 'n', 'n', 'u', 'm', 'c', 'c', 'n', 'c', 'u', 's', 'u', 'c', 'n', 'u', 'c', 'n', 'c', 'n', 'm', 'n', 'u', 'c', 'n', 'c', 's', 'c', 'u', 's', 'u', 's', 'u', 'm', 'm', 'u', 'u', 'n', 'n', 'u', 'm', 'n', 'c', 'u'], ['u', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'u', 'm', 'm', 'c', 'n', 's', 'n', 'm', 'u', 'm', 'm', 'n', 'm', 'c', 'u', 'n', 'u', 'n', 'u', 'n', 'n', 'c', 'u', 'u', 'm', 'm', 'c', 'm', 's', 'm', 'c', 'm', 'n', 'c', 'm', 'u', 'c', 'u', 'c', 'c', 'u', 's', 'u', 'n', 's', 'n', 'u', 'n', 'm', 'n', 'u', 'u'], ['u', 'n', 'u', 'm', 'u', 'u', 'm', 'u', 'u', 'm', 'c', 'u', 'm', 'c', 'u', 'm', 'n', 'm', 'c', 'u', 'c', 'm', 'n', 'u', 'c', 'm', 'c', 'c', 'u', 'n', 'm', 'n', 'c', 's', 'c', 'n', 'u', 'n', 'n', 'u', 'm', 'n', 'm', 'm', 'c', 'm', 'c', 'n', 'm', 'n', 'n', 'm', 'u', 'm', 's', 'm', 'n', 'c', 'u', 'm'], ['n', 'n', 'u', 'n', 'n', 'u', 'n', 'n', 'm', 'n', 'm', 'm', 'c', 'u', 'm', 's', 'm', 'c', 'u', 'u', 'c', 'n', 'c', 'n', 'u', 'n', 'n', 'm', 'u', 'c', 'u', 'c', 'u', 'u', 'm', 'n', 'm', 'u', 'm', 'c', 'm', 'm', 'u', 'u', 'n', 'u', 'c', 'u', 'u', 'n', 'u', 'n', 'n', 'm', 'n', 'u', 'n', 'n', 'u', 'm'], ['u', 'm', 'm', 'c', 'm', 'n', 'm', 'm', 'u', 'm', 'c', 'm', 'n', 'n', 'n', 'm', 'c', 'u', 'm', 'm', 'm', 'm', 'm', 'm', 'c', 'm', 'u', 'c', 'c', 'c', 'c', 'u', 'u', 'u', 'm', 'n', 'm', 'n', 'm', 'c', 'n', 'u', 'm', 'u', 'u', 'm', 'u', 'c', 'c', 'c', 'n', 'n', 'c', 'c', 'u', 'm', 'n', 'n', 'c', 'c'], ['m', 'c', 'c', 'u', 'c', 'c', 'u', 'm', 'c', 'm', 'n', 'm', 'c', 'n', 'n', 'c', 'u', 'n', 'u', 'c', 'm', 'u', 'm', 'm', 'u', 'm', 's', 'm', 'n', 'c', 'm', 'n', 'n', 'u', 'c', 'u', 'n', 'c', 'c', 'm', 'c', 'c', 'n', 'n', 'u', 'm', 'c', 'u', 'u', 'm', 'n', 's', 'n', 'u', 'c', 'n', 'n', 'c', 'n', 'c']]
                m_correct = [5,5,5,10,10,10,15,15,15,5,10,5,5,15,15,15,10,15,15,10,10,10]
                n_back = [1,2,3,2,1,3,2,3,1,2,2,1,3,3,2,1,3,2,3,2,1,3]


        elif expInfo['task'] == "ax-cpt":
            def check(x,y):
                global same
                global fd
                global score
                global n_hit
                global n_error
                global n_miss
                global n_pass
                if x == "c" and y == "n":
                    if same == 1:
                        score += 1
                        n_hit += 1
                        fd = 13
                    else:
                        n_miss += 1
                        fd = 11
                else:
                    if same==1:
                        score -= 1
                        n_error += 1
                        fd= 12
                    else:
                        n_pass += 1
                        fd = 9

            if expInfo['version'] == "train":
                #train letters
                Letters = [['n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u'], ['n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c'], ['n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u'], ['m', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c']]
                m_correct = [5,5,5,5,5,5,5,5]
                n_back = [1,2,3,3,3,3,3,3]
            else:
                #test letters
                Letters = [['m', 'u', 'n', 'c', 'm', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c'], ['m', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'u'], ['n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u'], ['n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'm', 'u'], ['n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'm', 'u', 'm', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c'], ['n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u'], ['n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c'], ['n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c'], ['n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c'], ['n', 'c', 'n', 'u', 'n', 'c', 'm', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c']]
                m_correct = [5,5,5,10,10,10,15,15,15,5,10,5,5,15,15,15,10,15,15,10,10,10]
                n_back = [1,2,3,2,1,3,2,3,1,2,2,1,3,3,2,1,3,2,3,2,1,3]

        #just to orgnise data: nback is weight here! perfect :)
      Begin Routine:
        if record == 1:
            eyetracker.setConnectionState(True)
            eyetracker.setRecordingState(True)
      Each Frame:
        if stimuli_mouse.getPressed()[2]==1:
            stimuli_mouse.clickReset()
            continueRoutine=False
  Routine fd
    TextComponent feedback_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $"Vous gangez "+ str(fd_score)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if record == 1:
            win.callOnFlip(send_trigger,14)
  Routine end
    TextComponent end_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Fini!
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    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        if record == 1:
            eyetracker.setRecordingState(False)
            eyetracker.setConnectionState(False)
  Routine FXfd
    TextComponent fd_corss
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_FXFD
      Code Type = Py
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      Begin Experiment:
        if expInfo['task'] == "n-back":
            eg = {1: "A,A",2:"A,B,A",3:"A,B,C,A"}
        else:
            eg = {1: "n,c",2:"n,c",3:"n,c"}
      Begin Routine:
        thisExp.addData("n_back",n_back[block])
        thisExp.addData("m_correct",m_correct[block])
        thisExp.addData("DifficultyLevel",3*(n_back[block]-1)+m_correct[block])
        thisExp.addData("false_alarm",n_error)
        thisExp.addData("hit",n_hit)
        thisExp.addData("correct_rejection",n_pass)
        thisExp.addData("miss",n_miss)
        thisExp.addData("score",score)
        thisExp.addData("n_block",n_block)
        n_block += 1

        if score >= m_correct[block]:
            block +=1

        fd_score = score
        score = 0
        trial = 0
        n_miss = 0
        n_error = 0
        n_pass = 0
        n_hit = 0


        if record == 1:
            win.callOnFlip(send_trigger,3)
  Routine FX
    TextComponent the_corss
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_FX
      Code Type = Auto->JS
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      Begin Routine:
        stimuli_mouse.setVisible(visible=0)
        if record == 1:
            win.callOnFlip(send_trigger,3)
      End Routine:
        win.callOnFlip(send_trigger,200+ n_block)
  Routine block_info
    TextComponent text_info
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $"Bloc "+str(block+1)+" sur "+str(len(n_back))+". \n\nL’instruction est "+str(eg[n_back[block]])+".\n\n Vous devez collecter au moin de points "+str(m_correct[block])
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    CodeComponent code_init
      Code Type = Py
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      Begin Experiment:
        same = 0
        trial = 0
        score = 0
        n_miss = 0
        n_error = 0
        n_pass = 0
        n_hit = 0
        fd = 0
        block = 0
        n_block = 0
        fd_text = ""
        calibing = 1

        stimuli_mouse = event.Mouse()
        stimuli_mouse.setVisible(visible=0)

        record = int(expInfo['record'])
        if record == 1:
            ioConfig['eyetracker.hw.sr_research.eyelink.EyeTracker']['default_native_data_file_name'] = expInfo['participant']
            from psychopy import parallel
            parallel.setPortAddress(0x0000BFE8)
            parallel.setData(0)
            eyetracker.setConnectionState(True)
            eyetracker.setRecordingState(True)
            def send_trigger(trigger):
                global parallel
                global eyetracker
                eyetracker.sendMessage(str(trigger))
                parallel.setData(trigger)
                core.wait(0.002)
                parallel.setData(0)


        if expInfo['task'] == "n-back":
            def check(x,y):
                global same
                global fd
                global score
                global n_hit
                global n_error
                global n_miss
                global n_pass
                global trial
                if x == y:
                    if same == 1:
                        score += 1
                        n_hit += 1
                        fd = 13
                    else:
                        n_miss += 1
                        fd = 11
                else:
                    if same==1:
                        score -= 1
                        n_error += 1
                        fd=12
                    else:
                        n_pass += 1
                        fd = 9



            if expInfo['version'] == "train":
                #train letters
                Letters = [['n', 'n', 'c', 'n', 'm', 'm', 'u', 'u', 'c', 'c', 'n', 'n', 'u', 'u', 'n', 'm', 'm', 's', 'c', 'n', 'n', 'c', 'n', 'n', 's', 'm', 'm', 's', 'n', 'c', 'c', 's', 'm', 'c', 'm', 'm', 's', 'm', 'c', 'u', 'u', 'c', 'c', 'n', 'c', 'c', 'n', 'u', 'u', 'c', 'c', 'n', 'n', 'u', 'u', 'c', 'c', 'u', 'c', 'm'] ,['m', 'n', 'u', 'c', 's', 'n', 'm', 'n', 'm', 'n', 'c', 's', 'c', 's', 'c', 'n', 'c', 'n', 'm', 's', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'm', 'n', 'c', 'n', 'u', 's', 'u', 'm', 'u', 'c', 'c', 'm', 'n', 'm', 'u', 'm', 'm', 'u', 'n', 'c', 'm', 's', 'm', 'u', 'm', 'u', 'n', 'm', 'c', 'm', 'c', 'm'] ,['u', 'm', 'n', 'm', 'm', 'n', 'u', 'n', 'u', 'u', 'm', 'n', 'm', 'n', 'c', 'n', 'c', 'u', 'c', 'n', 'u', 'm', 'u', 'n', 'u', 'm', 'n', 'u', 'm', 'n', 'c', 'm', 'n', 'c', 's', 'c', 'm', 'u', 'n', 'c', 'n', 'm', 'n', 'c', 'n', 'c', 'u', 'c', 'u', 's', 'u', 'm', 'u', 'm', 'c', 'c', 'n', 'm', 'm', 'n'] ,['n', 'm', 'n', 'u', 'm', 'n', 'n', 'c', 'm', 'n', 's', 'n', 'u', 'n', 'c', 'u', 's', 'u', 'n', 'n', 'u', 'n', 'c', 'n', 'm', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'n', 'm', 'n', 'c', 'm', 'n', 'c', 'm', 'n', 'c', 'm', 'n', 'c', 'm', 'u', 'm', 'u', 'c', 'n', 'u', 'n', 's', 'n', 'c', 'm', 'n'] ,['u', 'c', 'm', 'n', 's', 'n', 'c', 'u', 'n', 'm', 'u', 'm', 'n', 'u', 'c', 'u', 'u', 'm', 'm', 'n', 'n', 'm', 'n', 'c', 'u', 'm', 'c', 'u', 'c', 'u', 's', 'u', 'm', 'm', 'u', 'n', 'c', 'u', 'm', 'u', 'n', 'm', 'u', 'm', 'c', 'u', 'm', 'c', 'u', 'n', 'c', 'm', 'u', 'c', 'm', 'n', 'n', 'n', 'c', 'n'] ,['n', 'm', 'c', 'u', 'm', 'c', 'u', 's', 'u', 'c', 'n', 'u', 'm', 'u', 'n', 'm', 'u', 'c', 'm', 'u', 'c', 'n', 's', 'n', 'c', 'n', 'c', 'n', 'm', 'c', 'n', 'm', 'n', 'c', 'c', 'n', 'm', 'c', 'n', 'm', 'c', 'm', 'n', 'c', 'u', 'u', 'm', 's', 'm', 'n', 'm', 's', 'm', 'm', 'n', 's', 'n', 'm', 'u', 'n'] ,['u', 'n', 'm', 'u', 'c', 'm', 'n', 'm', 'u', 'm', 'n', 'u', 'u', 'n', 'c', 'u', 'n', 'n', 'u', 'm', 'n', 's', 'n', 's', 'n', 'm', 'c', 'c', 'u', 'n', 'c', 'n', 'u', 'c', 'n', 'c', 'm', 'n', 'c', 'u', 'n', 's', 'n', 'n', 'c', 'u', 'm', 'c', 'u', 's', 'u', 'm', 'u', 'm', 'n', 'u', 'm', 'u', 'u', 'c'] ,['m', 'n', 'c', 'm', 'n', 'u', 'n', 'n', 'm', 'u', 'c', 'm', 'c', 'n', 'm', 'u', 'c', 'c', 'm', 'n', 'u', 'm', 'n', 'c', 'u', 'n', 'm', 'u', 'c', 'm', 'u', 'n', 'n', 'u', 'm', 'c', 'm', 'u', 'n', 'm', 'c', 'n', 'm', 'n', 'u', 'm', 'n', 'm', 'u', 'm', 'm', 'c', 'u', 'n', 'u', 'm', 'n', 'u', 'u', 'u']]
                m_correct = [4,4,12,4,4,12,12]
                n_back = [1,2,2,3,3,3,3,3]
            else:
                #test letters
                Letters = [['n', 'n', 'c', 'u', 'm', 'm', 'c', 'c', 'n', 'n', 's', 'u', 'c', 'c', 's', 'n', 'n', 's', 'm', 'c', 'c', 'n', 'n', 'u', 'u', 'n', 'c', 'u', 'c', 'n', 'n', 's', 'n', 'n', 's', 'c', 'c', 'n', 'n', 'u', 'n', 'n', 'c', 'n', 'n', 'u', 'u', 'n', 'u', 'u', 'n', 'n', 's', 'm', 'u', 'u', 'm', 'm', 'u', 'n'] ,['c', 'n', 'u', 'n', 'c', 'n', 'm', 'n', 'u', 'c', 'm', 'm', 'n', 'c', 'n', 's', 'n', 'u', 'n', 'm', 'c', 'u', 'm', 'u', 's', 'u', 's', 'u', 'n', 'm', 'u', 'm', 'n', 'm', 'c', 'c', 'u', 'c', 'n', 'c', 'n', 'c', 'm', 'n', 'u', 'm', 'n', 'c', 'n', 'c', 'm', 'c', 's', 'c', 'c', 'n', 'u', 'm', 'm', 'u'] ,['c', 'n', 's', 'c', 'n', 'm', 'c', 'n', 'c', 'c', 'n', 'c', 'u', 'n', 'm', 'u', 'm', 'c', 'u', 'n', 'm', 's', 'm', 'n', 'u', 'n', 's', 'n', 'm', 'c', 'n', 'u', 'm', 'n', 'u', 'u', 'n', 'u', 'm', 'n', 'c', 'm', 'c', 'n', 'u', 'n', 'm', 'u', 'u', 'c', 'u', 'c', 'n', 'c', 'n', 's', 'n', 'n', 'n', 'u'] ,['m', 'c', 'u', 'c', 'u', 's', 'u', 'n', 'c', 'n', 'm', 'n', 'c', 'c', 'u', 'c', 'n', 'c', 'u', 'n', 'n', 'm', 'c', 's', 'c', 'u', 'c', 'u', 'n', 'm', 'n', 'c', 's', 'c', 'n', 'm', 'n', 'm', 'u', 'n', 'u', 'c', 's', 'c', 'n', 'u', 'c', 'm', 'n', 'c', 'm', 'c', 'u', 'c', 'u', 'c', 'm', 'n', 'n', 'm'] ,['u', 'u', 'c', 'c', 'm', 'm', 'c', 'c', 'u', 'u', 's', 'm', 'm', 'u', 'c', 'm', 'm', 'c', 'n', 'n', 'm', 'm', 'c', 'u', 'n', 'c', 'u', 'c', 'c', 'u', 'n', 'n', 'm', 'm', 'c', 'n', 'n', 'c', 'c', 's', 'c', 'u', 'm', 'm', 'c', 'u', 'u', 's', 'c', 'c', 'u', 'u', 'n', 'c', 'u', 'u', 'c', 'c', 'u', 'c'] ,['n', 'u', 'u', 'c', 's', 'n', 'c', 'm', 'u', 'c', 'u', 'u', 'm', 'u', 'u', 'm', 'u', 'n', 'c', 'u', 'm', 'n', 's', 'n', 'u', 'n', 'm', 'u', 'n', 'm', 'u', 'm', 'u', 'c', 's', 'c', 'm', 'c', 'u', 'c', 'm', 'u', 'u', 'm', 'c', 'n', 'u', 'n', 'u', 'm', 'c', 'n', 'm', 'c', 'u', 'm', 'c', 'u', 'c', 'c'] ,['s', 'm', 'n', 'u', 's', 'u', 'n', 's', 'n', 'm', 'u', 'm', 'n', 'u', 'm', 'c', 'm', 'u', 'm', 'u', 'm', 'u', 'c', 'u', 'c', 'n', 'm', 'n', 'm', 'n', 'u', 'n', 's', 'n', 'm', 'm', 'u', 'c', 'u', 'n', 'm', 'u', 'n', 'm', 'u', 'm', 'n', 'n', 'c', 'u', 'm', 'c', 'm', 'n', 'c', 'n', 'u', 'm', 'c', 'm'] ,['m', 'n', 'm', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'n', 'm', 'n', 'u', 'u', 'n', 'u', 'm', 'c', 'n', 'u', 'c', 'm', 'n', 'c', 'm', 'n', 'm', 'm', 'n', 's', 'n', 'm', 'm', 'n', 'u', 'c', 'm', 'n', 'c', 'n', 'u', 'n', 'n', 'u', 'n', 'm', 'u', 'c', 'm', 'n', 'c', 'm', 'n', 'u', 'm', 'c', 'c', 'c', 'n'] ,['c', 'c', 's', 'm', 'c', 'u', 'n', 'n', 'c', 'c', 'm', 'n', 'n', 's', 'c', 'c', 's', 'n', 'n', 'u', 'm', 'm', 'n', 'n', 'u', 'u', 's', 'n', 'c', 'c', 'm', 'm', 'u', 'c', 'c', 'n', 'n', 'c', 'c', 'u', 'c', 'c', 'm', 'm', 'c', 'c', 'u', 'u', 'm', 'c', 'c', 's', 'm', 'u', 'u', 's', 'c', 'm', 'c', 'u'] ,['u', 's', 'u', 'n', 'm', 'u', 'n', 'c', 'u', 'c', 'n', 'u', 'u', 'c', 'n', 'n', 'u', 'n', 'c', 'u', 'n', 'u', 'm', 'u', 'u', 'm', 'c', 'm', 'u', 'c', 'u', 'n', 'm', 's', 'm', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'c', 'n', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'm', 'n', 'm', 'n', 'm', 'u', 'n'] ,['s', 'c', 'u', 'n', 's', 'm', 'c', 's', 'n', 'u', 's', 'u', 'm', 'm', 'c', 'm', 'n', 'c', 'n', 'c', 'c', 'n', 'c', 'n', 'm', 'u', 'c', 'n', 'u', 'm', 'n', 'c', 'n', 'c', 's', 'c', 's', 'c', 'm', 'u', 'c', 'u', 'c', 'm', 'c', 'n', 'm', 'n', 'u', 's', 'u', 'n', 'u', 'u', 'm', 's', 'm', 'u', 'm', 'u'] ,['m', 'm', 'c', 'n', 'c', 'c', 'n', 'n', 'u', 'u', 'n', 'u', 'u', 's', 'm', 'm', 's', 'n', 'n', 'm', 'n', 'u', 'n', 'n', 'c', 'u', 'u', 'n', 'u', 'u', 'c', 'c', 'm', 'm', 'n', 'n', 'm', 'c', 'c', 'u', 'n', 'n', 'c', 'c', 'u', 'n', 'n', 'u', 'c', 'n', 'n', 's', 'c', 'm', 'u', 'u', 'm', 'm', 'u', 'm'] ,['n', 'm', 'c', 'n', 'm', 's', 'n', 'u', 'c', 's', 'c', 'u', 'n', 'u', 'm', 'c', 'u', 'm', 'c', 'n', 'u', 'n', 's', 'n', 'u', 'n', 'm', 'u', 'm', 'n', 'u', 'c', 'u', 'c', 'c', 'u', 'n', 'm', 'c', 'm', 'n', 'c', 'n', 'c', 'm', 'n', 'c', 'c', 'n', 'm', 'c', 'n', 'u', 'c', 'n', 'u', 'n', 'n', 'm', 'c'] ,['c', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'm', 'u', 'c', 'm', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'm', 'c', 'n', 'm', 's', 'm', 'u', 'c', 'm', 'c', 's', 'c', 'c', 'u', 'n', 'n', 'u', 'n', 'u', 'c', 'n', 'm', 'c', 'm', 'u', 'c', 'n', 'u', 'm', 'n', 'm', 'c', 'n', 'u', 'u', 'c', 'u', 'n', 'u', 'u', 'u'] ,['m', 'u', 'n', 'u', 'n', 's', 'n', 'c', 'u', 'u', 'c', 'n', 'm', 'n', 'u', 'm', 'c', 'u', 'n', 'u', 'n', 'u', 'c', 'u', 's', 'u', 'm', 'n', 'n', 'm', 'n', 'm', 'u', 'c', 's', 'c', 'm', 'm', 'u', 's', 'u', 'u', 'n', 'u', 's', 'u', 'c', 'm', 'c', 'm', 'u', 'm', 'u', 'n', 'u', 'm', 'n', 'u', 'c', 's'] ,['n', 'n', 'c', 'n', 'n', 'u', 'u', 'n', 'n', 's', 'u', 'u', 'c', 'm', 'n', 'm', 'm', 'c', 'c', 'm', 'm', 's', 'u', 'u', 'c', 'c', 'm', 'n', 'c', 'm', 'u', 'n', 'n', 'm', 'm', 'c', 'c', 'u', 'u', 's', 'm', 'c', 'n', 'c', 'c', 's', 'n', 'n', 'c', 'c', 's', 'n', 'n', 'c', 'c', 'm', 'm', 'c', 'u', 'c'] ,['u', 's', 'm', 'u', 'c', 's', 'n', 'c', 'n', 'm', 's', 'm', 'u', 'n', 'm', 'c', 'u', 'n', 'm', 'u', 'm', 'c', 'u', 'm', 'c', 'u', 'u', 'c', 'u', 'c', 'm', 'u', 's', 'u', 'c', 'u', 'c', 'c', 'n', 'c', 's', 'c', 'u', 'n', 'c', 'u', 'n', 'm', 'n', 'm', 'n', 's', 'n', 'n', 'm', 'n', 'c', 'u', 'n', 'c'] ,['n', 'u', 's', 'u', 'm', 'u', 'n', 'c', 'u', 'c', 'n', 'u', 'c', 'u', 'n', 'm', 'c', 'n', 'u', 'n', 'u', 'n', 'u', 'm', 'c', 'm', 'n', 'u', 'm', 'c', 'c', 'n', 'm', 'c', 'm', 'c', 'c', 'u', 'c', 'u', 'u', 'n', 'm', 'c', 'm', 'c', 'm', 'm', 'n', 'u', 'n', 'u', 'm', 'u', 'm', 'c', 'u', 'n', 'm', 'm'] ,['m', 'u', 'n', 'm', 'c', 'n', 'm', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'm', 'u', 'n', 'm', 'n', 'm', 'u', 'c', 'u', 'n', 'u', 'c', 'u', 'n', 'c', 'm', 'n', 'c', 'n', 's', 'n', 's', 'n', 'c', 'm', 'n', 'c', 'm', 'u', 'c', 'm', 'n', 'u', 'm', 'n', 'm', 'm', 'c', 'm', 'c', 'm', 's', 'm', 'n', 'u', 'm'] ,['c', 'n', 'u', 'm', 'c', 'u', 's', 'n', 'm', 'n', 'u', 'c', 'm', 'c', 'u', 'm', 'u', 'n', 'n', 'm', 'n', 'm', 'u', 'm', 'n', 's', 'n', 'm', 'c', 'm', 's', 'm', 'n', 'n', 'm', 'c', 'n', 'c', 'n', 'c', 'u', 'c', 'm', 'c', 'n', 'm', 'c', 'n', 'u', 'n', 'm', 'n', 'm', 'n', 'u', 's', 'u', 'm', 'u', 'n'] ,['n', 'c', 'c', 'm', 'm', 'u', 'u', 'c', 'c', 'u', 'u', 'm', 'm', 'n', 'n', 'm', 'm', 's', 'n', 'u', 'c', 'c', 'n', 'c', 'c', 'm', 'm', 'n', 'n', 'u', 'c', 'c', 's', 'n', 'm', 'm', 'u', 'm', 'u', 'u', 'c', 'm', 'c', 'c', 'm', 'm', 'n', 'n', 'm', 'c', 'm', 'm', 'u', 'm', 'u', 'm', 'm', 'u', 'm', 's'] ,['c', 'u', 'm', 'c', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'm', 'u', 'n', 'm', 'c', 'u', 'u', 'c', 'u', 'u', 'm', 'u', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'u', 'c', 'm', 'm', 'n', 'm', 'u', 'm', 'c', 's', 'c', 'c', 'm', 'n', 'u', 'm', 'n', 'm', 'c', 'n', 'm', 'u', 'c', 'c']]
                m_correct = [4,4,4,8,8,8,12,12,12,4,8,4,4,12,12,12,8,12,12,8,8,8]
                n_back = [1,2,3,2,1,3,2,3,1,2,2,1,3,3,2,1,3,2,3,2,1,3]


        elif expInfo['task'] == "ax-cpt":
            def check(x,y):
                global same
                global fd
                global score
                global n_hit
                global n_error
                global n_miss
                global n_pass
                if x == "c" and y == "n":
                    if same == 1:
                        score += 1
                        n_hit += 1
                        fd = 13
                    else:
                        n_miss += 1
                        fd = 11
                else:
                    if same==1:
                        score -= 1
                        n_error += 1
                        fd= 12
                    else:
                        n_pass += 1
                        fd = 9

            if expInfo['version'] == "train":
                #train letters
                Letters = [['n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u'], ['n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c'], ['n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u'], ['m', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c']]
                m_correct = [4,4,12,4,4,12,12]
                n_back = [1,2,2,3,3,3,3,3]
            else:
                #test letters
                Letters = [['m', 'u', 'n', 'c', 'm', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c'], ['m', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'u'], ['n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u'], ['n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'm', 'u'], ['n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'm', 'u', 'm', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c'], ['n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u'], ['n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c'], ['n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'n', 'c'], ['n', 'c', 'm', 'u', 'm', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'u', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c'], ['n', 'c', 'n', 'u', 'n', 'c', 'm', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'c', 'm', 'u', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c'], ['n', 'c', 'n', 'c', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'm', 'u', 'm', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'm', 'c', 'm', 'c', 'n', 'c'], ['m', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'u', 'n', 'u', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'u', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'n', 'c', 'm', 'u', 'm', 'u', 'n', 'c', 'm', 'u', 'n', 'c']]
                m_correct = [4,4,4,8,8,8,12,12,12,4,8,4,4,12,12,12,8,12,12,8,8,8]
                n_back = [1,2,3,2,1,3,2,3,1,2,2,1,3,3,2,1,3,2,3,2,1,3]

        #just to orgnise data: nback is weight here.
      Begin Routine:
        stimuli_mouse.setVisible(visible=0)

        if record == 1:
            win.callOnFlip(send_trigger,1)
      Each Frame:
        if frameN > 5:
            if stimuli_mouse.getPressed()[2]==1:
                stimuli_mouse.clickReset()
                continueRoutine=False
    TextComponent text_next
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = Cliquez avec le bouton droit de la souris pour continuer
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  Routine rest
    TextComponent rest_cross
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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    TextComponent rest_click
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 10
      text = Cliquez avec le bouton droit de la souris pour continuer
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    CodeComponent code_rest
      Code Type = Auto->JS
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      Begin Routine:
        if record == 1:
            win.callOnFlip(send_trigger,2)
      Each Frame:
        if rest_cross.status == FINISHED:
            if stimuli_mouse.getPressed()[2]==1:
                stimuli_mouse.clickReset()
                continueRoutine=False

        if defaultKeyboard.getKeys(keyList=["escape"]):
            if record == 1:
                eyetracker.setRecordingState(False)
                eyetracker.setConnectionState(False)
            core.quit()

        if defaultKeyboard.getKeys(keyList=["n"]):
            block +=1
      End Routine:
        if block == len(n_back):
            task_blocks.finished = True
  Routine report
    TextComponent How_much_effort
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Mon niveau d'effort cognitif se situe:
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    SliderComponent slider_effort
      borderColor = black
      color = black
      contrast = 0
      fillColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 0
      labels = 'min', 'max'
      letterHeight = 0.03
      opacity = 0
      pos = (0, 0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = slider
      ticks = (0,100)
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    TextComponent How_much_arous
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [condition] = slider_effort.rating
      text = A quel point vous sentez-vous actif/passif en ce moment?
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    SliderComponent slider_arous
      borderColor = black
      color = black
      contrast = 0
      fillColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 0
      labels = 'passif', 'actif'
      letterHeight = 0.03
      opacity = 0
      pos = (0, 0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [condition] = slider_effort.rating
      styles = slider
      ticks = (0,100)
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    TextComponent How_much_valence
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [condition] = slider_arous.rating
      text = A quel point vous sentez-vous positif/négatif en ce moment ?
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    SliderComponent slider_valenc
      borderColor = black
      color = black
      contrast = 0
      fillColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 0
      labels = 'négatif', 'positif'
      letterHeight = 0.03
      opacity = 0
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [condition] = slider_arous.rating
      styles = slider
      ticks = (0,100)
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    ImageComponent report_click
      disabled = True
      image = click.jpg
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [condition] = slider_valenc.rating
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    CodeComponent code_report
      Code Type = Auto->JS
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      Begin Routine:
        stimuli_mouse.setVisible(visible=1)

        if record == 1:
            win.callOnFlip(send_trigger,5)
      Each Frame:
        if stimuli_mouse.getPressed()[0]==1:
            if record == 1:
                win.callOnFlip(send_trigger,8)

        if slider_time.rating:
            if stimuli_mouse.getPressed()[2]==1:
                stimuli_mouse.clickReset()
                continueRoutine=False
      End Routine:
        stimuli_mouse.setVisible(visible=0)
    TextComponent text_report
      color = black
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [condition] = slider_time.rating
      text [set every repeat] = Cliquez avec le bouton droit de la souris pour continuer
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    TextComponent How_much_time
      color = black
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      startVal [condition] = slider_valenc.rating
      text = Comment avez-vous ressenti le temps qui passe?
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    SliderComponent slider_time
      borderColor = black
      color = black
      contrast = 0
      fillColor = 0.3255, 0.3255, 0.3255
      forceEndRoutine = False
      granularity = 0
      labels = '0', '4 min'
      letterHeight = 0.03
      opacity = 0
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [condition] = slider_valenc.rating
      styles = slider
      ticks = (0,100)
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = black
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = space key
    randomisePos = False
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = THREE_POINTS
    textColor = black
    units = from exp settings
  Routine calib
    CodeComponent code_calib
      Code Type = Auto->JS
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      Each Frame:
        if record == 1:
            win.callOnFlip(send_trigger,50)
        calibration.run()
Flow
  EyetrackerCalibrationRoutine calibration
  LoopInitiator task_blocks loopType="TrialHandler"
    loopType = random
    nReps = 9999
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    Routine FX
    Routine block_info
    Routine FX
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 60
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      Routine trial
    LoopTerminator trials
    Routine FXfd
    Routine fd
    Routine FX
    Routine report
    Routine rest
    Routine calib
  LoopTerminator task_blocks
  Routine end
